# 1 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/zg30"
;zg30
;avance-version (02/05/31)
;1D sequence
;using 30 degree flip angle
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*30m"
"MCREST = 30m - 30m"
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1 ze
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2 MCWRK  * 2
LBLF0, MCREST
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  d1
  p1*0.33 ph1
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd 
  lo to LBLF0 times td0

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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;NS: 1 * n, total number of scans: NS * TD0


;$Id: zg30,v 1.7.10.1 2005/11/10 13:18:59 ber Exp $
